Source:Signal%20Properties int SourceCh= 131 // number of digitized and stored channels
Source:Signal%20Properties int SampleBlockSize= 50 // number of samples transmitted at a time
Source:Signal%20Properties int SamplingRate= 1000 // sampling rate
Source:Signal%20Properties list SourceChOffset= 131 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 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0 0 0 0 // Offset for channels in A/D units
Source:Signal%20Properties list SourceChGain= 131 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 0.25 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0.25 0.152593 0.152593 0.152593 // gain for each channel (A/D units per physical unit)
