Source:Signal%20Properties list ChannelNames= 131 chan52 chan49 chan50 chan61 chan51 chan57 chan59 chan56 chan62 chan35 chan60 chan44 chan54 chan39 chan55 chan48 chan64 chan33 chan58 chan47 chan63 chan34 chan42 chan46 chan53 chan41 chan37 chan40 chan36 chan45 chan43 chan38 chan89 chan66 chan95 chan77 chan96 chan76 chan71 chan94 chan70 chan78 chan73 chan84 chan67 chan86 chan72 chan79 chan74 chan85 chan65 chan68 chan92 chan90 chan87 chan91 chan75 chan93 chan80 chan83 chan82 chan81 chan88 chan69 chan121 chan122 chan114 chan120 chan119 chan113 chan111 chan116 chan126 chan117 chan112 chan105 chan107 chan118 chan104 chan115 chan101 chan125 chan109 chan99 chan98 chan97 chan102 chan100 chan108 chan128 chan103 chan127 chan106 chan124 chan110 chan123 chan19 chan18 chan17 chan24 chan21 chan23 chan22 chan30 chan20 chan25 chan28 chan27 chan29 chan31 chan32 chan6 chan26 chan14 chan13 chan15 chan12 chan16 chan7 chan4 chan9 chan3 chan5 chan2 chan8 chan1 chan10 chan11 ainp1 ainp2 ainp3 // list of channel names
